---
API: 3
OpenSesame: 4.0.24
Platform: nt
---
set width 1024
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\pp02\\Desktop\\MILS - 2024"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background white

define pygaze_init calibration_validation
	set tracker_type EyeLink
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initializes and calibrates the eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run welcome True
	run setup True
	run calibration_validation True
	run experiment_sequence True
	run goodbye True

define loop experiment_sequence
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 O1 "beaker.jpg"
	setcycle 0 O1_type referent
	setcycle 0 O2 "bettle.bmp"
	setcycle 0 O2_type cohort
	setcycle 0 O3 "speaker.jpg"
	setcycle 0 O3_type rhyme
	setcycle 0 O4 "dolphin.jpg"
	setcycle 0 O4_type unrelated
	setcycle 0 set_type full
	setcycle 0 target_type referent
	setcycle 0 target_image O1
	setcycle 0 instruction_audio "pick-up-beaker.wav"
	setcycle 0 target_audio "beaker.wav"
	setcycle 1 O1 "carrot.jpg"
	setcycle 1 O1_type referent
	setcycle 1 O2 "carriage.bmp"
	setcycle 1 O2_type cohort
	setcycle 1 O3 "parrot.jpg"
	setcycle 1 O3_type rhyme
	setcycle 1 O4 "nickle.jpg"
	setcycle 1 O4_type unrelated
	setcycle 1 set_type full
	setcycle 1 target_type cohort
	setcycle 1 target_image O2
	setcycle 1 instruction_audio "pick-up-carriage.wav"
	setcycle 1 target_audio "carriage.wav"
	setcycle 2 O1 "pickle.jpg"
	setcycle 2 O1_type referent
	setcycle 2 O2 "picture.jpg"
	setcycle 2 O2_type cohort
	setcycle 2 O3 "nickle.jpg"
	setcycle 2 O3_type rhyme
	setcycle 2 O4 "speaker.jpg"
	setcycle 2 O4_type unrelated
	setcycle 2 set_type full
	setcycle 2 target_type rhyme
	setcycle 2 target_image O3
	setcycle 2 instruction_audio "pick-up-nickle.wav"
	setcycle 2 target_audio "nickle.wav"
	setcycle 3 O1 "candle.jpg"
	setcycle 3 O1_type referent
	setcycle 3 O2 "candy.jpg"
	setcycle 3 O2_type cohort
	setcycle 3 O3 "handle.bmp"
	setcycle 3 O3_type rhyme
	setcycle 3 O4 "dollar.jpg"
	setcycle 3 O4_type unrelated
	setcycle 3 set_type full
	setcycle 3 target_type unrelated
	setcycle 3 target_image O4
	setcycle 3 instruction_audio "pick-up-dollar.wav"
	setcycle 3 target_audio "dollar.wav"
	setcycle 4 O1 "casket.jpg"
	setcycle 4 O1_type referent
	setcycle 4 O2 "castle.jpg"
	setcycle 4 O2_type cohort
	setcycle 4 O3 "saddle.jpg"
	setcycle 4 O3_type unrelated
	setcycle 4 O4 "padlock.bmp"
	setcycle 4 O4_type unrelated
	setcycle 4 set_type cohort
	setcycle 4 target_type cohort
	setcycle 4 target_image O2
	setcycle 4 instruction_audio "pick-up-castle.wav"
	setcycle 4 target_audio "castle.wav"
	setcycle 5 O1 "paddle.jpg"
	setcycle 5 O1_type referent
	setcycle 5 O2 "padlock.bmp"
	setcycle 5 O2_type cohort
	setcycle 5 O3 "basket.jpg"
	setcycle 5 O3_type unrelated
	setcycle 5 O4 "nickle.jpg"
	setcycle 5 O4_type unrelated
	setcycle 5 set_type cohort
	setcycle 5 target_type cohort
	setcycle 5 target_image O2
	setcycle 5 instruction_audio "pick-up-padlock.wav"
	setcycle 5 target_audio "padlock.wav"
	setcycle 6 O1 "dolphin.jpg"
	setcycle 6 O1_type referent
	setcycle 6 O2 "dollar.jpg"
	setcycle 6 O2_type cohort
	setcycle 6 O3 "sandwich.jpg"
	setcycle 6 O3_type unrelated
	setcycle 6 O4 "parrot.jpg"
	setcycle 6 O4_type unrelated
	setcycle 6 set_type cohort
	setcycle 6 target_type referent
	setcycle 6 target_image O1
	setcycle 6 instruction_audio "pick-up-dolphin.wav"
	setcycle 6 target_audio "dolphin.wav"
	setcycle 7 O1 "sandal.bmp"
	setcycle 7 O1_type referent
	setcycle 7 O2 "sandwich.jpg"
	setcycle 7 O2_type cohort
	setcycle 7 O3 "collar.bmp"
	setcycle 7 O3_type unrelated
	setcycle 7 O4 "beaker.jpg"
	setcycle 7 O4_type unrelated
	setcycle 7 set_type cohort
	setcycle 7 target_type referent
	setcycle 7 target_image O1
	setcycle 7 instruction_audio "pick-up-sandal.wav"
	setcycle 7 target_audio "sandal.wav"
	setcycle 8 O1 "carrot.jpg"
	setcycle 8 O1_type referent
	setcycle 8 O2 "parrot.jpg"
	setcycle 8 O2_type rhyme
	setcycle 8 O3 "nickle.jpg"
	setcycle 8 O3_type unrelated
	setcycle 8 O4 "speaker.jpg"
	setcycle 8 O4_type unrelated
	setcycle 8 set_type "rhyme "
	setcycle 8 target_type rhyme
	setcycle 8 target_image O2
	setcycle 8 instruction_audio "pick-up-parrot.wav"
	setcycle 8 target_audio "parrot.wav"
	setcycle 9 O1 "sandal.bmp"
	setcycle 9 O1_type referent
	setcycle 9 O2 "candle.jpg"
	setcycle 9 O2_type rhyme
	setcycle 9 O3 "dolphin.jpg"
	setcycle 9 O3_type unrelated
	setcycle 9 O4 "collar.bmp"
	setcycle 9 O4_type unrelated
	setcycle 9 set_type rhyme
	setcycle 9 target_type rhyme
	setcycle 9 target_image O2
	setcycle 9 instruction_audio "pick-up-candle.wav"
	setcycle 9 target_audio "candle.wav"
	setcycle 10 O1 "paddle.jpg"
	setcycle 10 O1_type referent
	setcycle 10 O2 "saddle.jpg"
	setcycle 10 O2_type rhyme
	setcycle 10 O3 "casket.jpg"
	setcycle 10 O3_type unrelated
	setcycle 10 O4 "beaker.jpg"
	setcycle 10 O4_type unrelated
	setcycle 10 set_type rhyme
	setcycle 10 target_type referent
	setcycle 10 target_image O1
	setcycle 10 instruction_audio "pick-up-paddle.wav"
	setcycle 10 target_audio "paddle.wav"
	setcycle 11 O1 "casket.jpg"
	setcycle 11 O1_type referent
	setcycle 11 O2 "basket.jpg"
	setcycle 11 O2_type rhyme
	setcycle 11 O3 "picture.jpg"
	setcycle 11 O3_type unrelated
	setcycle 11 O4 "saddle.jpg"
	setcycle 11 O4_type unrelated
	setcycle 11 set_type rhyme
	setcycle 11 target_type referent
	setcycle 11 target_image O1
	setcycle 11 instruction_audio "pick-up-casket.wav"
	setcycle 11 target_audio "casket.wav"
	setcycle 12 O1 "dollar.jpg"
	setcycle 12 O1_type referent
	setcycle 12 O2 "sandwich.jpg"
	setcycle 12 O2_type unrelated
	setcycle 12 O3 "candle.jpg"
	setcycle 12 O3_type unrelated
	setcycle 12 O4 "bettle.bmp"
	setcycle 12 O4_type unrelated
	setcycle 12 set_type unrelated
	setcycle 12 target_type unrelated
	setcycle 12 target_image O2
	setcycle 12 instruction_audio "pick-up-sandwich.wav"
	setcycle 12 target_audio "sandwich.wav"
	setcycle 13 O1 "paddle.jpg"
	setcycle 13 O1_type referent
	setcycle 13 O2 "basket.jpg"
	setcycle 13 O2_type unrelated
	setcycle 13 O3 "dollar.jpg"
	setcycle 13 O3_type unrelated
	setcycle 13 O4 "castle.jpg"
	setcycle 13 O4_type unrelated
	setcycle 13 set_type unrelated
	setcycle 13 target_type unrelated
	setcycle 13 target_image O2
	setcycle 13 instruction_audio "pick-up-basket.wav"
	setcycle 13 target_audio "basket.wav"
	setcycle 14 O1 "pickle.jpg"
	setcycle 14 O1_type referent
	setcycle 14 O2 "candle.jpg"
	setcycle 14 O2_type unrelated
	setcycle 14 O3 "handle.bmp"
	setcycle 14 O3_type unrelated
	setcycle 14 O4 "candy.jpg"
	setcycle 14 O4_type unrelated
	setcycle 14 set_type unrelated
	setcycle 14 target_type referent
	setcycle 14 target_image O1
	setcycle 14 instruction_audio "pick-up-pickle.wav"
	setcycle 14 target_audio "pickle.wav"
	setcycle 15 O1 "carrot.jpg"
	setcycle 15 O1_type referent
	setcycle 15 O2 "bettle.bmp"
	setcycle 15 O2_type unrelated
	setcycle 15 O3 "speaker.jpg"
	setcycle 15 O3_type unrelated
	setcycle 15 O4 "dolphin.jpg"
	setcycle 15 O4_type unrelated
	setcycle 15 set_type unrelated
	setcycle 15 target_type referent
	setcycle 15 target_image O1
	setcycle 15 instruction_audio "pick-up-carrot.wav"
	setcycle 15 target_audio "carrot.wav"
	run trial_sequence

define sketchpad goodbye
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Thank participants etc." x=0 y=0 z_index=0

define inline_script setup
	set description "Executes Python code"
	___run__
	import random
	
	# canvas global EnvironmentError
	
	global my_canvas, my_keyboard, my_mouse
	
	my_canvas = Canvas()
	my_keyboard = Keyboard(keylist = ['space'])
	my_mouse = Mouse(visible=False)
	
	# Create the variables for the centre of the screen 
	
	global xc, yc
	
	xc = 0
	yc = 0
	
	# ROIs eye-tracker
	# + center of screen, i.e., 0,0
	# LM, MA, RM, MB
	
	
	poslist = [(-190, 0), (0, 190), (190, 0),(0, -190)]
	
	def write_tracker(index, ROI_label):
		pos = poslist[index]
	
		## remember the problem we with defining IA in the eye tracker. eye tracker origin is in the top left
	
		coords = (pos[0] + 512-0.5*189, pos[1]+384-0.5*189, 
				  pos[0]+512+0.5*189, pos[1]+384+0.5*189)
	
		self.experiment.pygaze_eyetracker.log('!V IAREA RECTANGLE {0} {1} {2} {3} {4} {5}'.format(index+1, coords[0], coords[1], coords[2], coords[3], ROI_label))
	
	def sort_by_indexes(lst, indexes, reverse=False):
	    # Use the 'sorted' function to sort the list 'lst' based on the corresponding indexes.
	    # The 'zip' function is used to pair each element of 'indexes' with the elements of 'lst'.
	    # The sorting is done based on the indexes, and the 'reverse' flag determines whether to sort in reverse order.
	    return [val for (_, val) in sorted(zip(indexes, lst), key=lambda x: x[0], reverse=reverse)]
	__end__
	set _prepare ""

define inline_script trial_code
	set description "Executes Python code"
	___run__
	# variables to control flow
	
	instruction_played = 0
	item_played = 0
	completed = 0
	clicked = 'none'
	logged = False
	
	# start of the experiment: drift correction
	# drift position is defined in the tracker's coodinate system
	
	eyetracker.drift_correction(pos = (512,384))
	
	# start recording
	
	eyetracker.start_recording()
	
	# send Areas of Interest
	
	for i in range(4):
		write_tracker(i, ROI_label[i])
		
	# show pictures
	
	my_mouse.show_cursor(show=False)
	my_canvas.clear()
	
	my_canvas.image(O1, True, O1_pos[0], O1_pos[1] )
	my_canvas.image(O2, True, O2_pos[0], O2_pos[1])
	my_canvas.image(O3, True, O3_pos[0], O3_pos[1] )
	my_canvas.image(O4, True, O4_pos[0], O4_pos[1])
	
	
	print('images shown')
	my_canvas.show()
	
	# send trigger for preview onser
	
	exp.pygaze_eyetracker.log('preview_onset')
	
	
	# preview
	clock.sleep(2000)
	my_mouse.set_pos(pos=(0,0))
	t0 = clock.time()
	
	# play audios, send triggers, collect responses
	
	while True:
		pressed = my_mouse.get_pressed()
		position, timestamp = my_mouse.get_pos()
		x, y = position
		tt = timestamp - t0
		if instruction_played == 0:
			print('instruction onset')			
			exp.pygaze_eyetracker.log('instruction_onset')
			ins_audio.play()
			instruction_played = 1
		if instruction_played == 1 and ins_audio.is_playing() == False and item_played == 0:
			print('audio_onset')
			exp.pygaze_eyetracker.log('target_onset')
			item_audio.play()
			item_played = 1
		if item_played == 1 and item_audio.is_playing() == False and logged == False:
			print('audio end')
			exp.pygaze_eyetracker.log('target_offset')
			completed =  1
			logged = True
			my_mouse.set_pos(pos=(0,0))
			my_mouse.show_cursor(show = True)
		if completed == 1 and pressed[0] == 1:
			print('trial_end')
			my_mouse.show_cursor(show=False)
			break
	
	my_canvas.clear()
	my_mouse.show_cursor(show = False)
	
	# log variables tracker
	
	eyetracker.log_var('O1', O1_item)
	eyetracker.log_var('O1_pos', O1_pos)
	eyetracker.log_var('O1_type', O1_type)
	
	eyetracker.log_var('O2', O2_item)
	eyetracker.log_var('O2_pos', O2_pos)
	eyetracker.log_var('O2_type', O2_type)
	
	eyetracker.log_var('O3', O3_item)
	eyetracker.log_var('O3_pos', O3_pos)
	eyetracker.log_var('O3_type', O3_type)
	
	eyetracker.log_var('O4', O4_item)
	eyetracker.log_var('O4_pos', O4_pos)
	eyetracker.log_var('O4_type', O4_type)
	
	eyetracker.log_var('set_type', set_type)
	eyetracker.log_var('target_type', target_type)
	eyetracker.log_var('item', target_audio)
	
	# log variables behavioural
	
	log.write_vars()
	
	# stop recording
	
	eyetracker.stop_recording()
	__end__
	___prepare__
	# intialise stimuli
	
	set_type = var.set_type
	target_type = var.target_type
	O1_item = var.O1
	O1_type = var.O1_type
	O2_item = var.O2
	O2_type = var.O2_type
	O3_item = var.O3
	O3_type = var.O3_type
	O4_item = var.O4
	O4_type = var.O4_type
	
	# load pictures
	
	O1 = pool[var.get(u'O1')]
	O2 = pool[var.get(u'O2')]
	O3 = pool[var.get(u'O3')]
	O4 = pool[var.get(u'O4')]
	
	# load audio
	
	ins_audio = Sampler(pool[var.get(u'instruction_audio')])
	item_audio = Sampler(pool[var.get(u'target_audio')])
	
	# random position items
	
	image_pos = random.sample(range(4), 4)
	
	O1_pos = poslist[image_pos[0]]
	O2_pos = poslist[image_pos[1]]
	O3_pos = poslist[image_pos[2]]
	O4_pos = poslist[image_pos[3]]
	
	ROI_label = [O1_type, O2_type, O3_type, O4_type]
	indices = [image_pos[0], image_pos[1], image_pos[2], image_pos[3]]
	
	# sort ROI label by indices so when write_tracker takes the label is the right one 
	
	ROI_label = sort_by_indexes(ROI_label, indices)
	__end__

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run trial_code True

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="Welcome participants etc." x=0 y=0 z_index=0

